OpenViBE-Scenario

0xc67a01dc N400 Experiment => #0
  Picture width = 600
  Picture height = 600
  Cross duration in ms = 500
  First pause duration in ms = 500
  Image/word duration in ms = 800
  Second pause duration in ms = 500
  Third pause duration in ms = 0
  Matching button = 1
  Nonmatching button = 3
  Unsure button = 2
  Experiment directory = experiment2
  Experiment iteration = 2
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
#0 -> Stimulation listener
  Log level to use = Information
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#4.Signal stream -> Channel Selector "1:13" => #5
  Channel List = 1:13
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#5, Input stream 2=#0 -> Generic stream writer
  Filename = c:/Users/bci-ras/Downloads/openvibe-1.1.0-src/n400/stored_signal/record-[$core{date}-$core{time}].ov
  Use compression = false
Signal=#5, Stimulations=#0 -> EDF File Writer
  Filename = c:/Users/bci-ras/Downloads/openvibe-1.1.0-src/n400/stored_signal/record-[$core{date}-$core{time}].edf
