OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
N400 Experiment => #1
  Window width = 600
  Window height = 600
  Cross duration in ms = 200
  Picture duration in ms = 3000
  Pause duration in ms = 2000
  Right answer button = 1
  Wrong answer button = 3
  Unsure button = 2
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
Input stream 1=#0.Signal stream, Input stream 2=#1 -> Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = false
Signal=#0.Signal stream, Stimulations=#1 -> EDF File Writer
  Filename = record-[$core{date}-$core{time}].edf
#1 -> 0xc67a01dc Stimulation listener
  Log level to use = Information
